PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': 'sub00'}
  Full-screen window = True
  Monitor = Home_test
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  colPriority = {'trigger.t': '31', 'thisRow.t': '30', 'Condition.started': '29', 'Condition.stopped': '28', 'Condition.duration': '27', 'game.score': '26', 'game.level': '24', 'game.speed': '23', 'game.wm_load_condition': '22', 'game.speed_condition': '21', 'Condition.info': '20', 'participant': '19', 'main_trials.thisTrialN': '18', 'main_trials.thisIndex': '17', 'main_trials.thisN': '16', 'main_trials.thisRepN': '15', 'targeted_duration': '14', 'control_condition': '13', 'Images_next_cond': '12', 'notes': '0', 'play_pretrial.started': '-1', 'pretrial.round_t': '-2', 'play_pretrial.stopped': '-3', 'pretrial.score': '-4', 'pretrial.start_level': '-5', 'pretrial.fail_level': '-6', 'pretrial.level_avg': '-7', 'JND': '-8', 'pretrial.game_speeds': '-9', 'pretrial.completion_rate': '-10', 'pretrial.weights': '-11', 'pretrial.optimization_parameters': '-12', 'expName': '-13', 'date': '-14', 'expStart': '-15', 'frameRate': '-16', 'psychopyVersion': '-17'}
  color = -0.6549, -0.6549, -0.0039
  expName = Tetris_Psychopy
  keyboardBackend = ioHub
  logging level = data
  runMode = 1
  rush = True
  sortColumns = priority
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Routines
  Routine show_next_control
    RoutineSettingsComponent show_next_control
      saveStartStop = False
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    ImageComponent Icon_for_next_cond
      image [set every repeat] = $images_next_cond
      saveStartStop = False
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine End
    RoutineSettingsComponent End
      saveStartStop = False
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    CodeComponent wait_3sec_to_end
      Code Type = Py
      Begin Routine:
        # creates coutdown
        timer_wait_3_sec = core.CountdownTimer(3)
      Each Frame:
        # due to the eyetracking component not ending the routine an additional routine breaker is needed
        # use a while loop to do nothing until the time runs out
        if timer_wait_3_sec.getTime() <= 0:
            continueRoutine = False # exit the loop and the routine --> paradigm ends
    TextComponent end_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_end
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    EyetrackerRecordComponent Stop_eyetracker
      actionType = Stop Only
      stopVal [condition] = Eye_tracking == True
      syncScreenRefresh = False
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  Routine wait_1s
    RoutineSettingsComponent wait_1s
      saveStartStop = False
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    TextComponent fix
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine explain_play_Tetris
    RoutineSettingsComponent explain_play_Tetris
      saveStartStop = False
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    CodeComponent skip_explain_play
      Code Type = Py
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
    ImageComponent controller_example
      image = Images/controller.png
      pos = (-0.65, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent play_Tetris_text
      letterHeight = 0.06
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_play_Tetris
      wrapWidth = 1.25
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    TextComponent Text_continue_7
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_7
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start_experiment
    RoutineSettingsComponent start_experiment
      saveStartStop = False
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    CodeComponent skip_start
      Code Type = Py
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
    TextComponent Start
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_start
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    TextComponent Text_continue_11
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_11
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine check_for_processes
    RoutineSettingsComponent check_for_processes
      saveStartStop = False
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    CodeComponent code_get_on_top
      Code Type = Py
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      Begin Routine:
        # gets PsychoPy on top initiall
        Get_on_top("PsychoPy")
    TextComponent check_Text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Checking for Processes...
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  Routine check_window_watch
    RoutineSettingsComponent check_window_watch
      saveStartStop = False
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    CodeComponent code_watch
      Code Type = Py
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      Begin Routine:
        #set Tetris to foreground
        Get_on_top("watch_Tetris")
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
      End Routine:
        Get_on_top("PsychoPy")
    TextComponent duration_and_fix_watch
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine check_window_play
    RoutineSettingsComponent check_window_play
      saveStartStop = False
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    CodeComponent code_play
      Code Type = Py
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      Begin Routine:
        if skip_if_enabled("main_trials") == True:
            # set Tetris to foreground
            Get_on_top("play_Tetris")
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
      End Routine:
        Get_on_top("PsychoPy")
    TextComponent duration_and_fix_play
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine show_play
    RoutineSettingsComponent show_play
      saveStartStop = False
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    CodeComponent skip_check_play
      Code Type = Py
      Each Frame:
        # skipped if main part should be skipped according to setting in "config_paradigm_psychopy"
        continueRoutine = skip_if_enabled("main_trials")
    TextComponent check_play
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = check play
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  Routine show_watch
    RoutineSettingsComponent show_watch
      saveStartStop = False
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    CodeComponent skip_show_watch
      Code Type = Py
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
    TextComponent check_watch
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = check watch
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  Routine intro
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    TextComponent Intro
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Tetris experiment!

        Press ENTER to continue.
    KeyboardComponent key_resp_to_intro
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine pretrial_intro
    RoutineSettingsComponent pretrial_intro
      saveStartStop = False
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    TextComponent Intro_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_Intro_2
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    TextComponent Text_continue_1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_1
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_pretrial
    RoutineSettingsComponent explain_pretrial
      saveStartStop = False
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    CodeComponent skip_explain_pretrial
      Code Type = Py
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      Each Frame:
        # skips this routine if there are no pretrial rounds set or there are no main trials
        continueRoutine = skip_if_enabled("pretrial") and skip_if_enabled("main_trials")
    TextComponent explanation_pretrial
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_explanation_pretrial
      wrapWidth = 1.5
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    TextComponent Text_continue_2
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_2
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_pretrial_2
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    TextComponent explanation_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine play_pretrial
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    CodeComponent Tetris_pretrial
      Code Type = Py
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      Begin Routine:
        # puts preTrial Tetris-Window on top
        Get_on_top("pretrial_Tetris")
        # waits one sec
        condition_or_wait_timer("wait")
        # start Tetris
        is_paused("pretrial_Tetris")

        if skip_if_enabled("pretrial") == True:
            # sets initial level tracking variable
            previous_level = game.level.value
            # log initial start_level
            thisExp.addData('Condition.info', 'info_preTrial_start')
            thisExp.nextEntry()
            thisExp.addData('pretrial.start_level', game.level.value)
      Each Frame:
        if skip_if_enabled("pretrial") == True:
          # keep track of the level when it increases
            if previous_level < game.level.value:
                previous_level = game.level.value

            # adds useful parameters to the logfile when the level decreases (only happens when "game over")
            elif previous_level > game.level.value:
                thisExp.addData('Condition.info', f'info_preTrial_round_{game.game_over_counter.value}')
                thisExp.addData('pretrial.fail_level', previous_level)
                thisExp.addData('pretrial.score', game.score.value)
                thisExp.addData('pretrial.round_t', globalClock.getTime(format='float'))
                thisExp.nextEntry()
                # adds new start level, except after last "game over "...
                if game.game_over_counter.value != game.pretrial_rounds:
                    thisExp.addData('pretrial.start_level', game.level.value)
                # reset previous_level according to new game.level.value
                previous_level = game.level.value

        # end pretrials if game over counter meets the amount of pretrial rounds set in the config files
        if game.game_over_counter.value == game.pretrial_rounds or game.pretrial_rounds == None:
           continueRoutine = False

        #keep track of weights and completion rate if you use jnd regression ans the Pretrial
        if game.jnd_regression == True and game.pretrial_rounds != None and frameN % 600 == 0:
            print(f' y_array: {game.regression.y_array[:]}')
            print(f' weights: {game.regression.weights[:]}')
      End Routine:
        # get back to Psychopy window
        Get_on_top("PsychoPy")
        # adds the achieved level and score to the data file
        thisExp.addData('pretrial.score', game.score.value)
        thisExp.addData('Condition.info', 'info_preTrial_sum')


        # execute game.level_for_main.value as defined by "config_tetris_game.txt"
        # skip automatically if pretrial_rounds are disabled
        if game.jnd_regression == True and game.pretrial_rounds != None:
            thisExp.addData('pretrial.level_avg', game.level_for_main.value)
            # overwrites game.level_for_main.value achieved by averaging with regression results
            game.level_for_main.value, popt, pcov = game.regression.determine_main_level()
            # log regression results
            thisExp.addData('pretrial.game_speeds', game.regression.x_array[:])
            thisExp.addData('JND', game.level_for_main.value)
            thisExp.addData('pretrial.completion_rate', game.regression.y_array[:])
            thisExp.addData('pretrial.weights', game.regression.weights[:])
            thisExp.addData('pretrial.optimization_parameters', popt)

        else:
            # do not log regression results if "Jnd_regression" is not enabled in config
            thisExp.addData('pretrial.game_speeds', None)
            thisExp.addData('pretrial.level_avg', game.level_for_main.value)
            thisExp.addData('JND', None)
            thisExp.addData('pretrial.completion_rate', None)
            thisExp.addData('pretrial.weights', None)
            thisExp.addData('pretrial.optimization_parameters', None)

        # skip this step if pretrials are disabled
        if game.pretrial_rounds != None:
            # sets new start level for main game (needs to be converted to an int, since this multiprocessing.values type cannot be changed
            game.level_for_main.value = round(game.level_for_main.value * game.level_for_main_factor)
            game.level.value = int(game.level_for_main.value)

        # resets absolut score
        game.score.value = 0
        # prints out the value for control purposes
        print(f'Main level: {game.level.value}')

        # ends pretrial pygame process
        if game.pretrial_rounds != None:
            pretrial_Tetris.terminate()
            pretrial_Tetris.join()
    TextComponent fix_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    EyetrackerRecordComponent Start_eytracking
      actionType = Start Only
      saveStartStop = False
      startVal [condition] = Eye_tracking == True
      syncScreenRefresh = False
  Routine show_pretrial
    RoutineSettingsComponent show_pretrial
      saveStartStop = False
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    CodeComponent skip_show_pretrial
      Code Type = Py
      Each Frame:
        # skips this routine if there are no pretrial rounds set
        continueRoutine = skip_if_enabled("pretrial")
    TextComponent check_pretrial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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      text:
        check pretrial
  Routine check_for_pretrial
    RoutineSettingsComponent check_for_pretrial
      saveStartStop = False
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    CodeComponent code_show_and_hide_pretrial
      Code Type = Py
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      Begin Routine:
        # skips this routine if there no pretrial rounds set
        if game.pretrial_rounds != None:
            Get_on_top("pretrial_Tetris")
      Each Frame:
        continueRoutine = skip_if_enabled("pretrial")
      End Routine:
        Get_on_top("PsychoPy")
    TextComponent duration_and_fix_play_pretrial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine routine_1
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    TextComponent How_to_play
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = How to play:
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  Routine intro_main
    RoutineSettingsComponent intro_main
      saveStartStop = False
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    CodeComponent skip_intro_main
      Code Type = Py
      Each Frame:
        # skips this routine if there are no pretrial rounds or no main_trials set since it is uncessary to introduce the main part here...
        continueRoutine = skip_if_enabled("pretrial") and skip_if_enabled("main_trials")
    TextComponent intro_main_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_intro_main
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    TextComponent text_continue_5
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_5
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine load_processes
    RoutineSettingsComponent load_processes
      saveStartStop = False
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    CodeComponent create_processes
      Code Type = Py
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      Before Experiment:
        # here, almost all important paradigm functions are defined (keyboard listener in tab "Begin Experiment")

        # import necessary packages for Tetris and load them
        import ctypes
        import pygame
        import time
        from pynput import keyboard as pynput_keyboard
        from multiprocessing import Process, Value
        from psychopy.visual.windowwarp import Warper

        # ensure that all classes can be imported from this folder
        sys.path.append('PyGame_Tetris_Code')
        from game import Game
        from colors import Colors
        from instructions import Instructions
        from main_trials import create_trials

        # initialize Pygame and Game
        pygame.init()
        game = Game()

        # get config information
        with open("config_paradigm_psychopy.txt", "r") as c_paradigm:
            config_paradigm = c_paradigm.read()
            exec(config_paradigm)

        if N_repeats != None:
            # create the main_trials-order for the main part
            create_trials(N_repeats, Main_trials_seed)

        # set language according to setting in config file
        Inst = Instructions()
        Inst.set_instructions(Language, Targeted_duration, N_repeats)

        # define Tetris game as a global function
        def Tetris_Instance(
                    window_name,
                    is_control,
                    pretrial,
                    pause_state,
                    game_over_counter,
                    score,
                    level,
                    speed,
                    level_for_main,
                    three_next_blocks,
                    x_array,
                    y_array,
                    weights
            ):

            # transfer Tetris_Instance() parameters from parent to child process
            game.visual_control = is_control
            game.pretrial = pretrial
            game.game_over_counter = game_over_counter
            game.score = score
            game.level = level
            game.speed = speed
            game.level_for_main = level_for_main
            game.three_next_blocks = three_next_blocks
            game.regression.x_array = x_array
            game.regression.y_array = y_array
            game.regression.weights = weights

            # set gamespeed
            clock = pygame.time.Clock()
            game.calculate_speed()
            # define the USEREVENTS
            GAME_UPDATE = pygame.USEREVENT
            VISUAL_CONTROL_CAP = pygame.USEREVENT + 1
            #set "previous" variables to None
            previous_level = None
            previous_three_next_blocks = None

            # name and initialize GUI
            screen = pygame.display.set_mode((game.grid.scale.screen_w, game.grid.scale.screen_h), pygame.FULLSCREEN | pygame.SCALED)
            pygame.display.set_caption(window_name)
            ctypes.windll.user32.ShowCursor(False)

            # create static graphic objects for the game
            title_font = pygame.font.Font(None, game.grid.scale.scale_font)
            score_surface = title_font.render("Score", True, Colors.white)
            next_surface = title_font.render("Next", True, Colors.white)
            game_over_surface = title_font.render("GAME OVER", True, Colors.white)
            level_surface = title_font.render("Level", True, Colors.white )
            score_rect = pygame.Rect(346  * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 70  * game.grid.scale.scale_factor, 170  * game.grid.scale.scale_factor, 60  * game.grid.scale.scale_factor)

            # game loop
            # be catious when changing code in here!
            while True:
                for event in pygame.event.get():
                    # changes pausing state according to is_paused()
                    game.pause = pause_state.value

                    # defines how to quit the game using ESCAPE
                    if event.type == pygame.KEYDOWN:
                        if event.key == pygame.K_ESCAPE:
                            pygame.quit()
                            sys.exit()

                    if game.pause == False:
                        # execute visual control mode
                        if game.visual_control == True:
                            if event.type == GAME_UPDATE and game.level.value <= 6:
                                game.exe_visual_control()
                            if  event.type == VISUAL_CONTROL_CAP and game.level.value > 6:
                                game.exe_visual_control()

                        # checks for keyboard input to play the game and for game over
                        if event.type == pygame.KEYDOWN and game.visual_control == False:
                            if game.game_over == True:
                                game.game_over = False
                                game.reset()
                            if event.key == pygame_key_2 and game.game_over == False:
                                game.move_left()
                            if event.key == pygame_key_4 and game.game_over == False:
                                game.move_right()
                            if event.key == pygame_key_1 and game.game_over == False:
                                # even if accelerate is enabled this the playing experience is better if you can move the block down one cell manually as well.
                                game.move_down()
                                if game.accelerate_down == True:
                                    # starts down movement by setting the start time "start_down" here
                                    game.start_down = time.time()
                                # adds one score point if "move_down()" is used
                                game.update_score(0, 1)

                            if event.key == pygame_key_3 and game.game_over == False:
                                game.rotate()

                        # checks whether its game over or not
                        if event.type == GAME_UPDATE and game.game_over == False:
                            game.move_down()

                        # restart automatically or with a keypress depending on config
                        if event.type == GAME_UPDATE and game.game_over == True:
                            if event.type == pygame.KEYDOWN or game.automatic_restart == True:
                                game.game_over = False
                                game.reset()

                    # checks whether down key is lifted to stop the down movement in the "accelerate" "down_type"
                    if event.type == pygame.KEYUP and game.accelerate_down == True:
                        if event.key == pygame_key_1:
                            #resets both parameters so the acceleration starts from the same speed each time
                            game.start_down = None
                            game.down_interval = game.start_interval


                # logic for the accelerate down movement outside of pygame event
                if game.accelerate_down == True and game.pause == False and game.game_over == False:
                    game.accelerate_downwards()

                # create the GUI for score and level
                score_value_surface = title_font.render(str(game.score.value), True, Colors.white)
                level_value_surface = title_font.render(str(game.level.value), True, Colors.white)

                # checks whether level changed and adjusts speed accordingly
                if previous_level != game.level.value:
                    game.calculate_speed()
                    previous_level = game.level.value

                # checks whether game.three_next_blocks.value changed and sets new "height" of rect for NEXT-blocks accordingly
                if previous_three_next_blocks != game.three_next_blocks.value:
                    if game.three_next_blocks.value == False:
                       next_rect_height = 180
                    else:
                       next_rect_height = 285
                    # draw next rect
                    next_rect = pygame.Rect(346 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 230  * game.grid.scale.scale_factor, 170  * game.grid.scale.scale_factor, next_rect_height * game.grid.scale.scale_factor)
                    previous_three_next_blocks = game.three_next_blocks.value

                # creates  GUI for changeable objects
                screen.fill(Colors.dark_blue)
                screen.blit(score_surface, (386 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 40 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor))
                screen.blit(next_surface, (398 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 200 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor))
                screen.blit(level_surface, (426 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 590 * game.grid.scale.scale_factor, 20 * game.grid.scale.scale_factor, 20 * game.grid.scale.scale_factor))
                screen.blit(level_value_surface, (518 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 590 * game.grid.scale.scale_factor, 20 * game.grid.scale.scale_factor, 20 * game.grid.scale.scale_factor))

                # displays game over message
                if game.game_over == True:
                    screen.blit(game_over_surface, (340 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 540 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor))

                # blit screen elements
                pygame.draw.rect(screen, Colors.light_blue, score_rect, 0, 10)
                screen.blit(score_value_surface, score_value_surface.get_rect(centerx = score_rect.centerx, centery = score_rect.centery))
                pygame.draw.rect(screen, Colors.light_blue, next_rect, 0 , 10)
                game.draw(screen)

                # if the disply needs to be flipped vertically this function does it
                if Flip_vertically == True or Flip_horizontally == True:
                    original_surf = pygame.display.get_surface() # collect all different surfaces on the screen to a new one
                    flipped_surface = pygame.transform.flip(original_surf, Flip_vertically, Flip_horizontally)
                    screen.blit(flipped_surface, dest=(0, 0))

                # updates screen in clock.tick(x) per second
                pygame.display.update()
                clock.tick(60)

        # checks whether a specific window is created
        def is_window_open(window_title):
            hwnd = ctypes.windll.user32.FindWindowW(None, window_title)
            if hwnd == 0: # window not found
                return False
            else:
                return True

        # define function to bring the window with a specific title to the foreground
        def Get_on_top(window_title):
            active_window = None
            HWND_TOPMOST = -1
            SWP_NOMOVE = 0x0002
            SWP_NOSIZE = 0x0001
            hwnd = ctypes.windll.user32.FindWindowW(None, window_title)
            # brings the searched window to foreground
            if hwnd != 0:
                active_window = ctypes.windll.user32.SetWindowPos(hwnd, HWND_TOPMOST, 0, 0, 0, 0, SWP_NOMOVE | SWP_NOSIZE)
                # Simulate left mouse button press and release to make window active(only once)
                ctypes.windll.user32.mouse_event(2, 0, 0, 0, 0)  # left down
                ctypes.windll.user32.mouse_event(4, 0, 0, 0, 0)  # left up
                ctypes.windll.user32.ShowCursor(False)

        # create a countdown timer with a "x"-second duration or speficific for a condition
        def condition_or_wait_timer(name_or_duration):
            if name_or_duration == "wait":
                t = 1
            elif name_or_duration == "Tetris":
                t = 30
            else:
                t = float(name_or_duration)
            timer = core.CountdownTimer(t)
            # use a while loop to do nothing until the time runs out
            while timer.getTime() > 0:
                pass

        # define Pause method for each specific process
        def is_paused(process):
            if str(process) == "play_Tetris":
                game.toggle_play.value = not game.toggle_play.value
            elif str(process) == "watch_Tetris":
                game.toggle_watch.value = not game.toggle_watch.value
            elif str(process) == "pretrial_Tetris":
                game.toggle_pretrial.value = not game.toggle_pretrial.value

        # define a method to skip a trial that belongs to either to the "pretrial" or "main_trials"
        def skip_if_enabled(part):
            if part == "pretrial" and game.pretrial_rounds == None or part == "main_trials" and N_repeats == None:
                # return False to set continueRoutine = False
                return False
            else:
                # return False to set continueRoutine = True
                return True

        # define the compare between high and low working memory load and speed method
        # define functions that creates a list with shuffled order of "high" and "low" wm_load and speed
        # used to randomize the "high" and "low" "play_Tetris" amount of next block or game speed
        def comp_wm_load_speed(total_trials, trial_nr):
            global first_trial
            global wm_load_seq
            global speed_seq
            global high_level
            global low_level
            # create the arrays only on the first trial
            if trial_nr == 0:
                # halfs the amount of conditions based on total trials
                n_per_load = int(total_trials/2)
                # creates a array of random order for each comparison that defines the order of "high" or "low" conditions in the "play_Tetris" parts.
                if Comp_wm_load == True and Comp_speed == False:
                    wm_load_low = 'low_load'
                    wm_load_high = 'high_load'
                    wm_load_seq = [wm_load_low]*n_per_load + [wm_load_high]*n_per_load # add equal number of "high" and "low"
                    np.random.seed(Load_seed)
                    np.random.shuffle(wm_load_seq)
                    print(f'wm_load_seq: {wm_load_seq}')
                if Comp_speed == True and Comp_wm_load == False:
                    speed_low = 'low_speed'
                    speed_high = 'high_speed'
                    speed_seq = [speed_low]*n_per_load + [speed_high]*n_per_load # add equal number of "high" and "low"
                    np.random.seed(Speed_seed)
                    np.random.shuffle(speed_seq)
                    print(f'speed_seq: {speed_seq}')

                # if both comparison conditions are enabled, in order to get an equal distribution across all 4 different possible combination a tuple array is created.
                if Comp_speed == True and Comp_wm_load == True:
                    combinations = ([('low_load', 'low_speed')] + [('low_load', 'high_speed')] + [('high_load', 'low_speed')] + [('high_load', 'high_speed')]) * int(n_per_load/2)

                    # shuffle the tuple array into a random order
                    np.random.seed(Comp_all_seed)
                    np.random.shuffle(combinations)

                    # unzip the tuple array in to the two part-arrays, which define the condition combinations in the "play_Tetris" parts
                    wm_load_seq, speed_seq = zip(*combinations)
                    print(f'wm_load_seq: {wm_load_seq} and speed_seq: {speed_seq}')
                  # make sure that high_level and low_level are never equal or below 0 (game crash)
                if Comp_speed == True:
                    if abs(Low_level) >= game.level.value and Low_level < 0:
                        low_level = 1
                    else:
                        low_level = game.level.value + Low_level
                    if abs(High_level) >= game.level.value and High_level < 0:
                        high_level = 1
                    else:
                        high_level = game.level.value + High_level
                # set this to false and ensure that the array creation is done only once!
                first_trial = False

            # set "high" or "low" for "wm_load" or "speed" in the current trial
            if Comp_wm_load == True:
                print(f'Trial {trial_nr + 1} of {total_trials} - {wm_load_seq[trial_nr]}')
                if wm_load_seq[trial_nr] == 'low_load':
                    game.three_next_blocks.value = False
                else:
                    game.three_next_blocks.value = True
            if Comp_speed == True:
                print(f'Trial {trial_nr + 1} of {total_trials} - {speed_seq[trial_nr]}')
                if speed_seq[trial_nr] == 'low_speed':
                    game.level.value = low_level
                    game.level_for_main.value = low_level
                else:
                    game.level.value = high_level
                    game.level_for_main.value = high_level
      Begin Experiment:
        #checks whether display orientation is altered (defined in "config_paradigm_psychopy.txt")
        if Flip_vertically == True or Flip_horizontally == True:

            #warping function provided by psychopy.visual.windowwarper
            #cannot be done "Before  experiment" due to win being defined at the end of "Before experiment"
            warper = Warper(win)

            #even if warping function is set warper needs to be updated before changes apply to the display
            #Psychopy uses switched arguments for a vertical and horizontal mirroring compared to "config_paradigm_psychopy.txt"
            warper.changeProjection(None, flipHorizontal = Flip_vertically, flipVertical = Flip_horizontally)

        #create a keyboard listener that collets Trigger by the MR
        #cannot be defined before the experiment due to globalCLock being defined in run(...)
        def check_for_trigger(key):
            try:
                if key.char =='q':
                    return False
                if key.char == Trigger:
                    thisExp.addData('trigger.t', globalClock.getTime(format='float'))
                    thisExp.nextEntry()
            except AttributeError:
                pass
      Begin Routine:
        # creates a seperate process for the Pretrial rounds so that the experiment can continue but only if there are pretrial rounds set
        if skip_if_enabled("pretrial") == True:
            pretrial_Tetris = Process(target=Tetris_Instance, args=(
                                      "pretrial_Tetris",
                                      False,
                                      True,
                                      game.toggle_pretrial,
                                      game.game_over_counter,
                                      game.score,
                                      game.level,
                                      game.speed,
                                      game.level_for_main,
                                      game.three_next_blocks,
                                      game.regression.x_array,
                                      game.regression.y_array,
                                      game.regression.weights
                                      ))
            pretrial_Tetris.start()

        #creates a seperate process for the Game so that the experiment can continue
        if skip_if_enabled("main_trials") == True:
            play_Tetris = Process(target=Tetris_Instance, args=(
                                  "play_Tetris",
                                  False,
                                  False,
                                  game.toggle_play,
                                  game.game_over_counter,
                                  game.score,
                                  game.level,
                                  game.speed,
                                  game.level_for_main,
                                  game.three_next_blocks,
                                  game.regression.x_array,
                                  game.regression.y_array,
                                  game.regression.weights
                                  ))
            play_Tetris.start()
        # create a window for the controll visual_control condition
            watch_Tetris = Process(target=Tetris_Instance, args=(
                                   "watch_Tetris",
                                   True,
                                   False,
                                   game.toggle_watch,
                                   game.game_over_counter,
                                   game.score,
                                   game.level,
                                   game.speed,
                                   game.level_for_main,
                                   game.three_next_blocks,
                                   game.regression.x_array,
                                   game.regression.y_array,
                                   game.regression.weights
                                   ))
            watch_Tetris.start()

        # start keyboard listener
        log_trigger = pynput_keyboard.Listener(on_press=check_for_trigger)
        log_trigger.start()

        # hides cursor that appears automatically after processes are created
        ctypes.windll.user32.ShowCursor(False)
      Each Frame:
        # ensures that this condition starts properly
        if is_window_open("pretrial_Tetris") == True:
            continueRoutine = skip_if_enabled("main_trials")
      End Experiment:
        # Terminate game and watch process
        if skip_if_enabled("main_trials") == True:
            play_Tetris.terminate()
            watch_Tetris.terminate()
        log_trigger.stop()
      End Routine:
        Get_on_top("PsychoPy")
        print(f'pretrial_Tetris loaded and paused({game.toggle_pretrial.value})')
        print(f'play_Tetris loaded and paused({game.toggle_play.value})')
        print(f'watch_Tetris loaded and paused({game.toggle_watch.value})')
    TextComponent load_processes_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = is_window_open("watch_Tetris") == True
      text = Start Processes...
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  Routine wait_for_trigger
    RoutineSettingsComponent wait_for_trigger
      saveStartStop = False
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    CodeComponent first_trigger
      Code Type = Py
      Begin Routine:
        # only adds first trigger data if main trials are enabled in "config_paradigm_psychopy"
        if skip_if_enabled("main_trials") == True:
            thisExp.addData('Condition.info', 'first_trigger')
      Each Frame:
        # additionally checks whether main_trials are enabled at all
        continueRoutine = skip_if_enabled("main_trials")

        # waits for a keyboard input (that is the trigger signal from the MRI) as defined in the "config_paradigm_psychopy"
        if defaultKeyboard.getKeys(keyList=[Trigger]):
            continueRoutine = False
    TextComponent wait_for_trigger_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Waiting for trigger to start...
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  Routine check_response_box
    RoutineSettingsComponent check_response_box
      saveStartStop = False
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    CodeComponent code_check_response
      Code Type = Py
      Before Experiment:
        # creates an pygame dummy screen to test the pygame.keys that are used
        def create_dummi_screen_responsecheck():
            dummi_screen = pygame.display.set_mode((100, 100), pygame.FULLSCREEN | pygame.SCALED)
            pygame.display.set_caption("check_responsebox")
            handle = ctypes.windll.user32.FindWindowW(None, "check_responsebox")

            # set the desired window position to be outside of the visible window (e.g., 10000 pixels from the left, 1000 pixels from the top)
            window_x, window_y = 10000, 10000
            ctypes.windll.user32.SetWindowPos(handle, -1, window_x, window_y, 0, 0, 0x0001)
      Begin Experiment:
        # variables for responsebox check that are displayed on screen
        x_1 = "-"
        x_2 = "-"
        x_3 = "-"
        x_4 = "-"
        x_5 = "-"
        x_1_1 =  "-"
        x_2_2 =  "-"
        x_3_3 =  "-"
        x_4_4 =  "-"
        x_5_5 =  "-"
        all_checked = False
      Begin Routine:
        create_dummi_screen_responsecheck()
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")

        # checks keys and updated variables accordingly
        for event in pygame.event.get():
            if event.type == pygame.KEYDOWN:
                if event.key == pygame_key_1:
                    if x_1 == '-':
                        x_1 = '1'
                    elif x_1 == '1':
                        x_1_1 = '1'
                if event.key == pygame_key_2:
                    if x_2 == '-':
                        x_2 = '2'
                    elif x_2 == '2':
                        x_2_2 = '2'
                if event.key == pygame_key_3:
                    if x_3 == '-':
                        x_3 = '3'
                    elif x_3 == '3':
                        x_3_3 = '3'
                if event.key == pygame_key_4:
                    if x_4 == '-':
                        x_4 = '4'
                    elif x_4 == '4':
                        x_4_4 = '4'
                if event.key == pygame_key_5:
                    if x_5 == '-':
                        x_5 = '5'
                    elif x_5 == '5':
                        x_5_5 = '5'
        if x_1_1 == "1" and x_2_2 == "2" and x_3_3 == "3" and x_4_4 == "4" and x_5_5 == "5":
            all_checked = True
      End Routine:
        # ends pygame instance
        pygame.quit()
    TextComponent text_check_response
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_check_response
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    TextComponent text_check_response_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [condition] = all_checked == True
      text = $Inst.font_check_response_2
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    TextComponent text_1
      letterHeight = 0.05
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'{x_1}\n{x_1_1}'
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    TextComponent text_2
      letterHeight = 0.05
      pos = (-0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'{x_2}\n{x_2_2}'
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'{x_3}\n{x_3_3}'
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'{x_4}\n{x_4_4}'
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'{x_5}\n{x_5_5}'
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    KeyboardComponent key_resp_return_response
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine wait_10sec_for_Trigger
    RoutineSettingsComponent wait_10sec_for_Trigger
      saveStartStop = False
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    CodeComponent wait_10sec_for_trigger_code
      Code Type = Py
      Begin Routine:
        # creates coutdown
        timer_wait_for_trigger = core.CountdownTimer(10)
      Each Frame:
        # additionally checks whether main_trials are enabled at all
        continueRoutine = skip_if_enabled("main_trials")

        # use a while loop to do nothing until the time runs out but can be interuptes by trigger (trigger signal determined by "config_paradigm_psychopy.txt")
        if timer_wait_for_trigger.getTime() <= 0:
            continueRoutine = False # exit the loop
        # reset timer
        elif defaultKeyboard.getKeys(keyList=[Trigger]):
           timer_wait_for_trigger.reset()
    TextComponent wait_10sec_for_trigger_text
      letterHeight = 0.1
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'Wait for remaining triggers...\n\n{round(timer_wait_for_trigger.getTime())}'
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  Routine block_ended
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Main Part ended...
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  Routine explain_tetris_1
    RoutineSettingsComponent explain_tetris_1
      saveStartStop = False
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    ImageComponent explain_game_mechanics
      image = $Inst.img_explain_game_mechanics
      pos = (0, 0.05)
      saveStartStop = False
      size = (1.75, 0.9)
      startVal [time (s)] = 0.0
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    TextComponent Text_continue_3
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_3
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_tetris_2
    RoutineSettingsComponent explain_tetris_2
      saveStartStop = False
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    ImageComponent explain_controls
      image = $Inst.img_explain_controls
      saveStartStop = False
      size = (1.1, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent Controls
      letterHeight = 0.05
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_Controls
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    TextComponent Text_continue_4
      letterHeight = 0.05
      pos = (0.0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
      wrapWidth = 2
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    KeyboardComponent press_continue_4
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_watch_Tetris
    RoutineSettingsComponent explain_watch_Tetris
      saveStartStop = False
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    CodeComponent skip_explain_watch
      Code Type = Py
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
    ImageComponent watch_example
      image = Images/eye.png
      pos = (-0.65, 0.0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_watch
      letterHeight = 0.06
      pos = (0.2, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_watch
      wrapWidth = 1.25
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    TextComponent Text_continue_9
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_9
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_fixation_cross
    RoutineSettingsComponent explain_fixation_cross
      saveStartStop = False
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    CodeComponent skip_explain_cross
      Code Type = Py
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
    ImageComponent baseline_example
      image = Images/crosshair.png
      pos = (-0.65, 0.0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_cross
      letterHeight = 0.06
      pos = (0.2, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_cross
      wrapWidth = 1.25
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    TextComponent Text_continue_10
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_10
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_motor_control
    RoutineSettingsComponent explain_motor_control
      saveStartStop = False
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    CodeComponent skip_explain_motor
      Code Type = Py
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
    ImageComponent motorcontrol_example
      image = Images/button.png
      pos = (-0.65, 0.0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_motor
      letterHeight = 0.06
      pos = (0.2, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_motor
      wrapWidth = 1.25
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    TextComponent Text_continue_8
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_8
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine show_play_tetris
    RoutineSettingsComponent show_play_tetris
      saveStartStop = False
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    ImageComponent Icon_for_play_Tetris
      image [set every repeat] = Images/controller.png
      saveStartStop = False
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine tetris_condition
    RoutineSettingsComponent tetris_condition
      saveStartStop = False
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    CodeComponent execute_play_Tetris
      Code Type = Py
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      Begin Routine:
        # sets "high" or "low" "speed" or "wm_load"
        if Comp_wm_load == True or Comp_speed == True:
            comp_wm_load_speed(main_trials.nTotal, main_trials.thisN)

        # bring Tetris to foreground
        Get_on_top("play_Tetris")
        # wait one sec
        condition_or_wait_timer("wait")
        # Tetris resumes here
        is_paused("play_Tetris")

        # collect start time for logging
        condition_started = globalClock.getTime(format='float')
      End Routine:
        # get offset of the condition
        condition_stopped = globalClock.getTime(format='float')
        # if the control condition is "watch_Tetris": pauses Tetris
        is_paused("play_Tetris")
        # waits one seconds
        condition_or_wait_timer("wait")
        # if the control condition is "watch_Tetris": sets Tetris window to background
        Get_on_top("PsychoPy")
    TextComponent duration_and_fix_play_Tetris
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $Targeted_duration
      text = +
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  Routine condition_ended
    RoutineSettingsComponent condition_ended
      saveStartStop = False
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    TextComponent condition_ended_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = $Inst.font_condition_ended
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  Routine random_control_condition
    RoutineSettingsComponent random_control_condition
      saveStartStop = False
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    CodeComponent execute_codition
      Code Type = Py
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      Begin Routine:
        # if the control condition is "watch_Tetris": set Tetris to foreground
        Get_on_top(control_condition)
        # wait one sec
        condition_or_wait_timer("wait")
        # if the control condition is "watch_Tetris": Tetris begins here
        is_paused(control_condition)

        # collect start time for logging
        condition_started = globalClock.getTime(format='float')
      Each Frame:
        # create a press rhythm if enabled by "config_paradigm_psychopy" by changing the opacity of the shape/image periodically
        if control_condition == "motor_control" and Show_motor_rhythm == True:
            press_rhythm = core.getTime()
            if Motor_symbol == "shape":
                if press_rhythm % (game.speed.value/1000 * 2.5) < (game.speed.value/1000):
                    press_shape.setOpacity(1)
                else:
                    press_shape.setOpacity(0)
            elif Motor_symbol == "button":

                if press_rhythm % (game.speed.value/1000 * 2.5) < (game.speed.value/1000):
                    press_button.setOpacity(1)
                else:
                    press_button.setOpacity(0)
      End Routine:
        # resets opacity
        press_shape.setOpacity(0)
        press_button.setOpacity(0)
        # get offset of the condition
        condition_stopped = globalClock.getTime(format='float')
        # if the control condition is "watch_Tetris": pauses Tetris
        is_paused(control_condition)
        # waits one seconds
        condition_or_wait_timer("wait")
        # if the control condition is "watch_Tetris": sets Tetris window to background
        Get_on_top("PsychoPy")
    PolygonComponent press_shape
      fillColor = white
      opacity [set every repeat] = 0
      saveStartStop = False
      shape = cross
      size = (0.075, 0.075)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $Targeted_duration
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    TextComponent duration_and_fix
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $Targeted_duration
      text = +
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    ImageComponent press_button
      image = Images/button.png
      opacity [set every repeat] = 0
      pos = (0, -0.02)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $Targeted_duration
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  Routine explain_basic_structure
    RoutineSettingsComponent explain_basic_structure
      saveStartStop = False
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    CodeComponent skip_basic_structure
      Code Type = Py
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
    ImageComponent controller_example_1
      image = Images/controller.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent watch_example_1
      image = Images/eye.png
      pos = (-0.2, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent motorcontrol_example_1
      image = Images/button.png
      pos = (0.2, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent baseline_example_1
      image = Images/crosshair.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Announcement
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_Announcement
      wrapWidth = 1.8
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    TextComponent Text_continue_6
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_6
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wait_1s_pretrial
    RoutineSettingsComponent wait_1s_pretrial
      saveStartStop = False
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    CodeComponent skip_wait_pretrial
      Code Type = Py
      Each Frame:
        # skips this routine if there are no pretrial rounds set
        skip_if_enabled("pretrial")
    TextComponent fix_wait_pretrial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine intro_how_to_play
    RoutineSettingsComponent intro_how_to_play
      saveStartStop = False
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    TextComponent text_how_to_play
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_how_to_play
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    TextComponent Text_continue_2_1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_2_1
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start_pretrial
    RoutineSettingsComponent start_pretrial
      saveStartStop = False
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    CodeComponent skip_start_pretrial
      Code Type = Py
      Each Frame:
        # skips this routine if there are no pretrial rounds set
        continueRoutine = skip_if_enabled("pretrial")
    TextComponent text_start_pretrial
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        $Inst.font_start_pretrial
    KeyboardComponent press_continue_4_1
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intro_structure
    RoutineSettingsComponent intro_structure
      saveStartStop = False
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    CodeComponent skip_intro
      Code Type = Py
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
    TextComponent text_intro_structure
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_intro_structure
      wrapWidth = 1.5
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    TextComponent text_continue_5_1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_5_1
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_staircase
    RoutineSettingsComponent explain_staircase
      saveStartStop = False
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    CodeComponent skip_explain_staircase
      Code Type = Py
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      Each Frame:
        # skips this routine if there are no pretrial rounds set or the staircase method is not enabled
        continueRoutine = skip_if_enabled("pretrial") and game.pretrial_staircase
    TextComponent text_explain_staircase
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_explain_staircase
      wrapWidth = 1.5
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    TextComponent Text_continue_3_1
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_3_1
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_comp_load
    RoutineSettingsComponent explain_comp_load
      saveStartStop = False
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    CodeComponent skip_explain_comp_load
      Code Type = Py
      Each Frame:
        # additionally checks whether main_trials are enabled at all and skips this routine if there no pretrial rounds set
        continueRoutine = skip_if_enabled("main_trials") and Comp_wm_load
    ImageComponent controller_example_2
      image = Images/controller.png
      pos = (-0.65, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_comp_load
      letterHeight = 0.06
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_explain_comp_load
      wrapWidth = 1.25
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    TextComponent Text_continue_7_1
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_7_1
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_comp_speed
    RoutineSettingsComponent explain_comp_speed
      saveStartStop = False
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    CodeComponent skip_explain_comp_speed
      Code Type = Py
      Each Frame:
        #additionally checks whether main_trials are enabled at all or skips this routine if there no pretrial rounds set
        continueRoutine = skip_if_enabled("main_trials") and Comp_speed
    ImageComponent controller_example_3
      image = Images/controller.png
      pos = (-0.65, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_comp_speed
      letterHeight = 0.06
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_explain_comp_speed
      wrapWidth = 1.25
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    TextComponent Text_continue_7_2
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_6_2
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_trials
    RoutineSettingsComponent explain_trials
      saveStartStop = False
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    CodeComponent skip_explain_trials
      Code Type = Py
      Each Frame:
        continueRoutine = skip_if_enabled("main_trials")
    ImageComponent img_explain_trials
      image = Images/Explain_Trials.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.75, 0.53)
      startVal [time (s)] = 0.0
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    TextComponent text_explain_trials
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      wrapWidth = 1.5
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      text:
        $Inst.font_explain_trials
    TextComponent Text_continue_10_1
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_continue
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    KeyboardComponent press_continue_10_1
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine three_seconds_timer
    RoutineSettingsComponent three_seconds_timer
      saveStartStop = False
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    CodeComponent code_three_sec_timer
      Code Type = Py
      Begin Routine:
        # creates coutdown
        three_sec_timer = core.CountdownTimer(3)
      Each Frame:
        # additionally checks whether main_trials are enabled at all
        continueRoutine = skip_if_enabled("main_trials")

        # lets timer run out
        if three_sec_timer.getTime() <= 0:
            # exits routine
            continueRoutine = False
      End Routine:
        #if pretrials are disabled set the restart level/game.level_for_main.value to the Start_level from "config_tetris_game"
        if skip_if_enabled("pretrial") == False:
            game.level_for_main.value = game.level.value
            print(f'Restart Level set to {game.level_for_main.value}')

        # set main_trial repeats to 0 if its disabled in config
        if skip_if_enabled("main_trials") == False:
            n_repeats = 0

        # or set it to 1 if N_repeats is not None in config
        else:
            n_repeats = 1
    TextComponent text_three_sec_timer
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $int(three_sec_timer.getTime()) + 1
  Routine pause_n_sec
    RoutineSettingsComponent pause_n_sec
      saveStartStop = False
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    CodeComponent code_pause_n_sec
      Code Type = Py
      Begin Routine:
        # creates coutdown
        pause_timer = core.CountdownTimer(Pause_sec)
      Each Frame:
        # additionally checks whether main_trial or/and pretrial is enabled
        continueRoutine = skip_if_enabled("main_trials") and skip_if_enabled("pretrial")

        # lets timer run out
        if pause_timer.getTime() <= 0:
            # exits routine
            continueRoutine = False
    TextComponent text_break
      letterHeight = 0.1
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Inst.font_pause_n_sec
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    TextComponent text_pause_n_sec
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $int(pause_timer.getTime()) + 1
  Routine wait_ITI_after_control
    RoutineSettingsComponent wait_ITI_after_control
      saveStartStop = False
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    CodeComponent add_data_control
      Code Type = Py
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      Begin Routine:
        # check whether iti variation is enabled in config
        if ITI_variation == True:
            iti_add = np.random.choice(itis)
        else:
            iti_add = 0
      End Routine:
        # logs on and offsets and condition duration into one line for later processing
        thisExp.addData('Condition.started', condition_started)
        thisExp.addData('Condition.stopped', condition_stopped)
        thisExp.addData('targeted.duration', Targeted_duration)
        thisExp.addData('Condition.duration', condition_stopped - condition_started)
        thisExp.addData('Condition.info', f'info_{control_condition}')
    TextComponent fix_after_control
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $3 + iti_add
      text = +
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  Routine wait_ITI_after_play_tetris
    RoutineSettingsComponent wait_ITI_after_play_tetris
      saveStartStop = False
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    CodeComponent add_data_play_Tetris
      Code Type = Py
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      Begin Routine:
        # check whether iti variation is enabled in config and set the iti accordingly
        if ITI_variation == True:
            # if a random seed is used for the iti variation make sure it is only used in the first trial
            # (or iti will be the same for each trial)
            if main_trials.thisN == 0:
                # create the intertrial interval variation array for "main_trials"
                # create an array of floats between ITI_lower and ITI_upper with 0.1 increments as extension variations of the intertrial interval
                itis = np.arange(ITI_lower, ITI_upper, 0.1)
                # apply seed if enabled in paradigm config
                np.random.seed(ITI_seed)

            # choose a random iti from the available "itis" range
            iti_add = np.random.choice(itis)
        else:
            iti_add = 0
      End Routine:
        # logs on-, offsets and condition duration, etc. in one row (in the data file .csv) for later processing
        thisExp.addData('Condition.started', condition_started)
        thisExp.addData('Condition.stopped', condition_stopped)
        thisExp.addData('targeted.duration', Targeted_duration)
        thisExp.addData('Condition.duration', condition_stopped - condition_started)
        thisExp.addData('Condition.info', 'info_play_Tetris')
        thisExp.addData('game.score', game.score.value)
        thisExp.addData('game.score', game.score.value)
        thisExp.addData('game.level', game.level.value)
        thisExp.addData('game.speed', game.speed.value)
        if Comp_wm_load == True:
            thisExp.addData('game.wm_load_condition', wm_load_seq[main_trials.thisN])
        else:
            thisExp.addData('game.wm_load_condition', None)
        if Comp_speed == True:
            thisExp.addData('game.speed_condition', speed_seq[main_trials.thisN])
        else:
            thisExp.addData('game.speed_condition', None)

        thisExp.nextEntry()
    TextComponent fix_after_play_Tetris
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $3 + iti_add
      text = +
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Flow
  Routine load_processes
  Routine check_for_processes
  Routine show_pretrial
  Routine check_for_pretrial
  Routine show_play
  Routine check_window_play
  Routine show_watch
  Routine check_window_watch
  Routine wait_1s
  Routine check_response_box
  Routine pretrial_intro
  Routine explain_pretrial
  Routine intro_how_to_play
  Routine explain_tetris_1
  Routine explain_staircase
  Routine explain_tetris_2
  Routine start_pretrial
  Routine wait_1s_pretrial
  Routine play_pretrial
  Routine wait_1s_pretrial
  Routine pause_n_sec
  Routine intro_main
  Routine intro_structure
  Routine explain_basic_structure
  Routine explain_play_Tetris
  Routine explain_comp_load
  Routine explain_comp_speed
  Routine explain_motor_control
  Routine explain_watch_Tetris
  Routine explain_fixation_cross
  Routine explain_trials
  Routine start_experiment
  Routine wait_1s
  Routine wait_1s
  Routine wait_for_trigger
  Routine wait_1s
  Routine three_seconds_timer
  LoopInitiator main_trials loopType="TrialHandler"
    conditions = []
    conditionsFile = main_trials.csv
    loopType = sequential
    nReps = n_repeats
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    Routine show_play_tetris
    Routine wait_1s
    Routine tetris_condition
    Routine condition_ended
    Routine wait_ITI_after_play_tetris
    Routine show_next_control
    Routine wait_1s
    Routine random_control_condition
    Routine condition_ended
    Routine wait_ITI_after_control
  LoopTerminator main_trials
  Routine wait_10sec_for_Trigger
  Routine End
