PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': 'sub00'}
  Full-screen window = True
  Monitor = Home_test
  Screen = 1
  Units = height
  Use version = 2024.1.1
  Window size (pixels) = [1707, 960]
  colPriority = {'trigger.t': '31', 'thisRow.t': '30', 'Condition.started': '29', 'Condition.stopped': '28', 'Condition.duration': '27', 'Condition.info': '26', 'condition': '25', 'participant': '24', 'game.score': '23', 'trials.thisTrialN': '22', 'trials.thisIndex': '21', 'trials.thisN': '20', 'trials.thisRepN': '19', 'targeted_duration': '18', 'Images_next_cond': '17', 'notes': '0', 'play_pretrial.started': '-1', 'play_pretrial.stopped': '-2', 'pretrial_score': '-3', 'pretrial_level_avg': '-4', 'expName': '-5', 'date': '-6', 'expStart': '-7', 'frameRate': '-8', 'psychopyVersion': '-9'}
  color = -0.6549, -0.6549, -0.0039
  expName = Tetris_fMRI
  keyboardBackend = ioHub
  logging level = data
  runMode = 1
  rush = True
  sortColumns = priority
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Routines
  Routine Show_next_Cond
    RoutineSettingsComponent Show_next_Cond
      saveStartStop = False
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    ImageComponent Icon_for_next_cond
      image [set every repeat] = $Images_next_cond
      saveStartStop = False
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine End
    RoutineSettingsComponent End
      saveStartStop = False
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    TextComponent end_font
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3
      text = Thank you for your Participation!
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  Routine Condition
    RoutineSettingsComponent Condition
      saveStartStop = False
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    CodeComponent execute_codition
      Code Type = Py
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      Begin Routine:
        #set Tetris to foreground
        Get_on_top(condition)

        #initialize press rhythm
        if condition == "motor_control" and show_motor_rhythm == True:
            pygame.init()
            game.calculate_speed()

        #wait one sec
        condition_or_wait_timer("wait")
        #Tetris begins here
        is_paused(condition)

        #collect start time for logging
        condition_started = globalClock.getTime(format='float')
      Each Frame:
        #created a press rhythm if enabled by "config_paradigm_psychopy.txt" by changing the opacity of the cross shape periodically
        if condition == "motor_control" and show_motor_rhythm == True:
            press_rhythm = core.getTime()
            if press_rhythm % (game.speed/1000 * 2) < (game.speed/2000):
                press_cross.setOpacity(1)
            else:
                press_cross.setOpacity(0)
      End Routine:
        #resets opacity
        press_cross.setOpacity(0)
        #get offset of the condition
        condition_stopped = globalClock.getTime(format='float')
        #pauses Tetris
        is_paused(condition)
        #waits one seconds
        condition_or_wait_timer("wait")
        #sets Tetris window to background
        Get_on_top("PsychoPy")
    PolygonComponent press_cross
      fillColor = white
      opacity [set every repeat] = 0
      saveStartStop = False
      shape = cross
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $targeted_duration
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    TextComponent duration_and_fix
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $targeted_duration
      text = +
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  Routine wait_1s
    RoutineSettingsComponent wait_1s
      saveStartStop = False
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    TextComponent fix
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine explain_play_Tetris
    RoutineSettingsComponent explain_play_Tetris
      saveStartStop = False
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    ImageComponent controller_example
      image = Images/controller.png
      pos = (-0.65, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent play_Tetris_text
      letterHeight = 0.06
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Controller: Play the game! Try to focus on MENTALLY ROTATING the blocks when playing! The starting level is adjusted based on the level you reached in the earlier rounds!
      wrapWidth = 1.25
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    TextComponent Text_continue_7
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to continue!
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    KeyboardComponent press_continue_7
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start_experiment
    RoutineSettingsComponent start_experiment
      saveStartStop = False
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    TextComponent Start
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Now, the experiment starts!
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    TextComponent Text_continue_11
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to start!
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    KeyboardComponent press_continue_11
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine check_for_processes
    RoutineSettingsComponent check_for_processes
      saveStartStop = False
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    TextComponent check_Text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Checking for Processes...
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        Get_on_top("PsychoPy")
  Routine check_window_watch
    RoutineSettingsComponent check_window_watch
      saveStartStop = False
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    CodeComponent code_watch
      Code Type = Py
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      Begin Routine:
        #set Tetris to foreground
        Get_on_top("watch_Tetris")
        is_paused("watch_Tetris")
        is_paused("watch_Tetris")
      End Routine:
        Get_on_top("PsychoPy")
    TextComponent duration_and_fix_watch
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine check_window_play
    RoutineSettingsComponent check_window_play
      saveStartStop = False
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    CodeComponent code_play
      Code Type = Py
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      Begin Routine:
        #set Tetris to foreground
        Get_on_top("play_Tetris")
        is_paused("play_Tetris")
        is_paused("play_Tetris")
      End Routine:
        Get_on_top("PsychoPy")
    TextComponent duration_and_fix_play
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine show_play
    RoutineSettingsComponent show_play
      saveStartStop = False
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    TextComponent check_play
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = check play
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  Routine show_watch
    RoutineSettingsComponent show_watch
      saveStartStop = False
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    TextComponent check_watch
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = check watch
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  Routine intro
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    TextComponent Intro
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Tetris experiment!

        Press ENTER to continue.
    KeyboardComponent key_resp_to_intro
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine explain_pretrial
    RoutineSettingsComponent explain_pretrial
      saveStartStop = False
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    TextComponent explanation_pretrial
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        During this first part of the experiment, you will play Tetris and get used to the setup!

        How to play:
    TextComponent Text_continue_2
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to continue!
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    KeyboardComponent press_continue_2
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pretrial_intro
    RoutineSettingsComponent pretrial_intro
      saveStartStop = False
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    TextComponent Intro_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the Tetris experiment
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    TextComponent Text_continue_1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to continue!
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    KeyboardComponent press_continue_1
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_pretrial_2
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    TextComponent explanation_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine play_pretrial
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    CodeComponent Tetris_pretrial
      Code Type = Py
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      Begin Routine:
        #puts preTrial Tetris-Window on top
        Get_on_top("pretrial_Tetris")
        #waits one sec
        condition_or_wait_timer("wait")
        #start Tetris
        is_paused("pretrial_Tetris")
      End Routine:
        #adds the achieved level and score to the data file
        thisExp.addData('pretrial_score', game.score.value)
        #resets absolut score
        game.score.value = 0
        thisExp.addData('pretrial_level_avg', game.level_for_main.value)
        #sets new start level for main game
        game.level.value = round(game.level_for_main.value * 0.75)

        #ends pretrial pygame
        pretrial_Tetris.terminate()
        pretrial_Tetris.join()

        Get_on_top("PsychoPy")
    TextComponent fix_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = game.game_over_counter.value == 3
      text = +
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  Routine show_pretrial
    RoutineSettingsComponent show_pretrial
      saveStartStop = False
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    TextComponent check_pretrial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
         check pretrial
  Routine check_for_pretrial
    RoutineSettingsComponent check_for_pretrial
      saveStartStop = False
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    CodeComponent code_show_and_hide_pretrial
      Code Type = Py
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      Begin Routine:
        is_paused("pretrial_Tetris")
        is_paused("pretrial_Tetris")
        Get_on_top("pretrial_Tetris")
      End Routine:
        Get_on_top("PsychoPy")
    TextComponent duration_and_fix_play_pretrial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine routine_1
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    TextComponent How_to_play
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = How to play:
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  Routine intro_main
    RoutineSettingsComponent intro_main
      saveStartStop = False
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    TextComponent intro_main_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Now the main part of the experiment begins!
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    TextComponent text_continue_5
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to continue!
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    KeyboardComponent press_continue_5
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine load_processes
    RoutineSettingsComponent load_processes
      saveStartStop = False
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    CodeComponent create_processes
      Code Type = Py
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      Before Experiment:
        #import necessary packages for Tetris and load them
        import ctypes
        import pygame
        from pynput import keyboard as pynput_keyboard
        from multiprocessing import Process, Value
        from psychopy.visual.windowwarp import Warper
        #ensure that all classes can be imported from this folder
        sys.path.append('PyGame_Tetris_Code')
        from game import Game
        from colors import Colors

        #Initialize Pygame and Game
        pygame.init()
        game = Game()

        #get config information
        with open("config_paradigm_psychopy.txt", "r") as c_paradigm:
            config_paradigm = c_paradigm.read()
            exec(config_paradigm)

        #define Tetris game as a global function
        def Tetris_Instance(
                    window_name,
                    is_control,
                    pretrial,
                    pause_state,
                    game_over_counter,
                    score,
                    level,
                    level_for_main
            ):

            #transfer game parameters from parent to child process
            game.visual_control = is_control
            game.pretrial = pretrial
            game.game_over_counter = game_over_counter
            game.score = score
            game.level = level
            game.level_for_main = level_for_main

            #set gamespeed
            clock = pygame.time.Clock()
            game.calculate_speed()
            GAME_UPDATE = pygame.USEREVENT
            VISUAL_CONTROL_CAP = pygame.USEREVENT + 1
            previous_level = game.level.value

            #name and initialize GUI
            screen = pygame.display.set_mode((game.grid.scale.screen_w, game.grid.scale.screen_h), pygame.FULLSCREEN | pygame.SCALED)
            pygame.display.set_caption(window_name)
            ctypes.windll.user32.ShowCursor(False)

            #create graphic object for the game
            title_font = pygame.font.Font(None, game.grid.scale.scale_font)
            score_surface = title_font.render("Score", True, Colors.white)
            next_surface = title_font.render("Next", True, Colors.white)
            game_over_surface = title_font.render("GAME OVER", True, Colors.white)
            level_surface = title_font.render("Level", True, Colors.white )

            score_rect = pygame.Rect(346  * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 70  * game.grid.scale.scale_factor, 170  * game.grid.scale.scale_factor, 60  * game.grid.scale.scale_factor)
            next_rect = pygame.Rect(346 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 230  * game.grid.scale.scale_factor, 170  * game.grid.scale.scale_factor, 180  * game.grid.scale.scale_factor)

            while True:
                for event in pygame.event.get():
                #changes pausing state according to is_paused()
                    game.pause = pause_state.value

                #defines how to quit the game using ESCAPE
                    if event.type == pygame.KEYDOWN:
                        if event.key == pygame.K_ESCAPE:
                            pygame.quit()
                            sys.exit()

                    if game.pause == False:
                        #execute visual control mode
                        if game.visual_control == True:
                            if event.type == GAME_UPDATE and game.level.value <= 6:
                                game.exe_visual_control()
                            if  event.type == VISUAL_CONTROL_CAP and game.level.value > 6:
                                game.exe_visual_control()

                          #checks forKeyboard input to play the game
                        if event.type == pygame.KEYDOWN and game.visual_control == False:
                            if game.game_over == True:
                                game.game_over = False
                                game.reset()
                            if event.key == pygame_key_2 and game.game_over == False:
                                game.move_left()
                            if event.key == pygame_key_4 and game.game_over == False:
                                game.move_right()
                            if event.key == pygame_key_1 and game.game_over == False:
                                game.move_down()
                                game.update_score(0, 1)
                            if event.key == pygame_key_3 and game.game_over == False:
                                game.rotate()

                         #checks whether its game over or not
                        if event.type == GAME_UPDATE and game.game_over == False:
                            game.move_down()

                        if event.type == GAME_UPDATE and game.game_over == True:
                            game.game_over = False
                            game.reset()


                score_value_surface = title_font.render(str(game.score.value), True, Colors.white)
                level_value_surface = title_font.render(str(game.level.value), True, Colors.white)

                #checks whether level changed and adjusts speed accordingly
                if previous_level != game.level.value:
                    game.calculate_speed()
                    previous_level = game.level.value

                #creates  GUI for changeable objects

                screen.fill(Colors.dark_blue)
                screen.blit(score_surface, (386 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 40 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor))
                screen.blit(next_surface, (398 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 200 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor))
                screen.blit(level_surface, (426 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 590 * game.grid.scale.scale_factor, 20 * game.grid.scale.scale_factor, 20 * game.grid.scale.scale_factor))
                screen.blit(level_value_surface, (518 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 590 * game.grid.scale.scale_factor, 20 * game.grid.scale.scale_factor, 20 * game.grid.scale.scale_factor))
                #displays game over message
                if game.game_over == True:
                    screen.blit(game_over_surface, (340 * game.grid.scale.scale_factor + game.grid.scale.x_displacement, 450 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor, 50 * game.grid.scale.scale_factor))

                pygame.draw.rect(screen, Colors.light_blue, score_rect, 0, 10)
                screen.blit(score_value_surface, score_value_surface.get_rect(centerx = score_rect.centerx, centery = score_rect.centery))
                pygame.draw.rect(screen, Colors.light_blue, next_rect, 0 , 10)
                #pygamefunction do execute screen instructions

                game.draw(screen)
                #if the disply needs to be flipped vertically thus function does it
                if flip_vertically == True or flip_horizontally == True:
                    original_surf = pygame.display.get_surface()
                    flipped_surface = pygame.transform.flip(original_surf, flip_vertically, flip_horizontally)
                    screen.blit(flipped_surface, dest=(0, 0))

                 #updates screen in clock.tick(x) per second
                pygame.display.update()
                clock.tick(60)
        #checks whether a specific window is created
        def is_window_open(window_title):
            hwnd = ctypes.windll.user32.FindWindowW(None, window_title)
            if hwnd == 0: # Window not found
                return False
            else:
                return True

        # define function to bring the window with a specific title to the foreground
        def Get_on_top(window_title):
            active_window = None
            HWND_TOPMOST = -1
            SWP_NOMOVE = 0x0002
            SWP_NOSIZE = 0x0001
            hwnd = ctypes.windll.user32.FindWindowW(None, window_title)
            if hwnd != 0:
                active_window = ctypes.windll.user32.SetWindowPos(hwnd, HWND_TOPMOST, 0, 0, 0, 0, SWP_NOMOVE | SWP_NOSIZE)
                # Simulate left mouse button press and release to make window active(only once)
                ctypes.windll.user32.mouse_event(2, 0, 0, 0, 0)  # left down
                ctypes.windll.user32.mouse_event(4, 0, 0, 0, 0)  # left up
                ctypes.windll.user32.ShowCursor(False)

        # Create a countdown timer with a "x"-second duration or speficific for a condition
        def condition_or_wait_timer(name_or_duration):
            if name_or_duration == "wait":
                t = 1
            elif name_or_duration == "Tetris":
                t = 30
            else:
                t = float(name_or_duration)
            timer = core.CountdownTimer(t)
            # Use a while loop to do nothing until the time runs out
            while timer.getTime() > 0:
                pass

        #define Pause method for each specific process
        def is_paused(process):
            if str(process) == "play_Tetris":
                game.toggle_play.value = not game.toggle_play.value
            elif str(process) == "watch_Tetris":
                game.toggle_watch.value = not game.toggle_watch.value
            elif str(process) == "pretrial_Tetris":
                game.toggle_pretrial.value = not game.toggle_pretrial.value
      Begin Experiment:
        #checks whether display orientation is altered (defined in "config_paradigm_psychopy.txt")
        if flip_vertically == True or flip_horizontally == True:

            #warping function provided by psychopy.visual.windowwarper
            warper = Warper(win)

            #even if warping function is set warper needs to be updated before changes apply to the display
            #Psychopy uses switched arguments for a vertical and horizontal mirroring compared to "config_paradigm_psychopy.txt"
            warper.changeProjection(None, flipHorizontal = flip_vertically, flipVertical = flip_horizontally)

        #create a keyboard listener that collets Trigger by the MR
        #cannot be defined before the experiment due to globalCLock being defined in run(...)
        def check_for_trigger(key):
            try:
                if key.char =='q':
                    return False
                if key.char == trigger:
                    thisExp.addData('trigger.t', globalClock.getTime(format='float'))
                    thisExp.nextEntry()
            except AttributeError:
                pass
      Begin Routine:
        #creates a seperate process for the Pretrial rounds so that the experiment can continue
        pretrial_Tetris = Process(target=Tetris_Instance, args=(
                                  "pretrial_Tetris",
                                  False,
                                  True,
                                  game.toggle_pretrial,
                                  game.game_over_counter,
                                  game.score,
                                  game.level,
                                  game.level_for_main
                                  ))
        pretrial_Tetris.start()

        #creates a seperate process for the Game so that the experiment can continue
        play_Tetris = Process(target=Tetris_Instance, args=(
                              "play_Tetris",
                              False,
                              False,
                              game.toggle_play,
                              game.game_over_counter,
                              game.score,
                              game.level,
                              game.level_for_main,
                              ))
        play_Tetris.start()
        #create a window for the controll visual_control condition
        watch_Tetris = Process(target=Tetris_Instance, args=(
                               "watch_Tetris",
                               True,
                               False,
                               game.toggle_watch,
                               game.game_over_counter,
                               game.score,
                               game.level,
                               game.level_for_main,
                               ))
        watch_Tetris.start()

        #start keyboard listener
        log_trigger = pynput_keyboard.Listener(on_press=check_for_trigger)
        log_trigger.start()

        #hides cursor that appears automatically after processes are created
        ctypes.windll.user32.ShowCursor(False)
      End Experiment:
        #Terminate game and watch process
        play_Tetris.terminate()
        watch_Tetris.terminate()
        log_trigger.stop()
      End Routine:
        Get_on_top("PsychoPy")
        print(game.toggle_pretrial.value)
        print(game.toggle_play.value)
        print(game.toggle_watch.value)
    TextComponent load_processes_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = is_window_open("watch_Tetris") == True
      text = Start Processes...
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  Routine wait_for_trigger
    RoutineSettingsComponent wait_for_trigger
      saveStartStop = False
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    CodeComponent log_first_trigger
      Code Type = Py
      Begin Routine:
        thisExp.addData('Condition.info', 'first_trigger')
    TextComponent wait_for_trigger_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Waiting for trigger to start...
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    KeyboardComponent wait_for_trigger_response
      allowedKeys = 't'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine check_response_box
    RoutineSettingsComponent check_response_box
      saveStartStop = False
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    CodeComponent code_check_response
      Code Type = Py
      Before Experiment:
        #creates an pygame dummy screen to test the pygame.keys that are used
        def create_dummi_screen_responsecheck():
            dummi_screen = pygame.display.set_mode((100, 100), pygame.FULLSCREEN | pygame.SCALED)
            pygame.display.set_caption("check_responsebox")
            handle = ctypes.windll.user32.FindWindowW(None, "check_responsebox")

            # Set the desired window position to be outside of the visible window (e.g., 10000 pixels from the left, 1000 pixels from the top)
            window_x, window_y = 10000, 10000
            ctypes.windll.user32.SetWindowPos(handle, -1, window_x, window_y, 0, 0, 0x0001)
      Begin Experiment:
        #variables for responsebox check that are displayed on screen
        x_1 = "-"
        x_2 = "-"
        x_3 = "-"
        x_4 = "-"
        x_5 = "-"
        x_1_1 =  "-"
        x_2_2 =  "-"
        x_3_3 =  "-"
        x_4_4 =  "-"
        x_5_5 =  "-"
        all_checked = False
      Begin Routine:
        create_dummi_screen_responsecheck()
      Each Frame:
        #checks keys and updated variables accordingly
        for event in pygame.event.get():
            if event.type == pygame.KEYDOWN:
                if event.key == pygame_key_1:
                    if x_1 == '-':
                        x_1 = '1'
                    elif x_1 == '1':
                        x_1_1 = '1'
                if event.key == pygame_key_2:
                    if x_2 == '-':
                        x_2 = '2'
                    elif x_2 == '2':
                        x_2_2 = '2'
                if event.key == pygame_key_3:
                    if x_3 == '-':
                        x_3 = '3'
                    elif x_3 == '3':
                        x_3_3 = '3'
                if event.key == pygame_key_4:
                    if x_4 == '-':
                        x_4 = '4'
                    elif x_4 == '4':
                        x_4_4 = '4'
                if event.key == pygame_key_5:
                    if x_5 == '-':
                        x_5 = '5'
                    elif x_5 == '5':
                        x_5_5 = '5'
        if x_1_1 == "1" and x_2_2 == "2" and x_3_3 == "3" and x_4_4 == "4" and x_5_5 == "5":
            all_checked = True
      End Routine:
        #ends pygame instance
        pygame.quit()
    TextComponent text_check_response
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please press each button on the responsebox twice!
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    TextComponent text_check_response_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [condition] = all_checked == True
      text = Responses checked successfully!
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    TextComponent text_1
      letterHeight = 0.05
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'{x_1}\n{x_1_1}'
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    TextComponent text_2
      letterHeight = 0.05
      pos = (-0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'{x_2}\n{x_2_2}'
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'{x_3}\n{x_3_3}'
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'{x_4}\n{x_4_4}'
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'{x_5}\n{x_5_5}'
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    KeyboardComponent key_resp_return_response
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine wait_10sec_for_Trigger
    RoutineSettingsComponent wait_10sec_for_Trigger
      saveStartStop = False
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    CodeComponent wait_10sec_for_trigger_code
      Code Type = Py
      Begin Routine:
        #creates coutdown
        timer = core.CountdownTimer(10)
      Each Frame:
        # Use a while loop to do nothing until the time runs out but can be interuptes by trigger (trigger signal determined by "config_paradigm_psychopy.txt")
        if timer.getTime() <= 0:
            continueRoutine = False # Exit the loop
        #reset timer
        elif defaultKeyboard.getKeys(keyList=["t"]):
           timer.reset()
    TextComponent wait_10sec_for_trigger_text
      letterHeight = 0.1
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f'Wait for remaining triggers...\n\n{round(timer.getTime())}'
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  Routine block_ended
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Main Part ended...
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  Routine explain_tetris_1
    RoutineSettingsComponent explain_tetris_1
      saveStartStop = False
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    ImageComponent explain_game_mechanics
      image = Images/explain_game_mechanics.png
      pos = (0, 0.05)
      saveStartStop = False
      size = (1.75, 0.9)
      startVal [time (s)] = 0.0
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    TextComponent Text_continue_3
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to continue!
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    KeyboardComponent press_continue_3
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_tetris_2
    RoutineSettingsComponent explain_tetris_2
      saveStartStop = False
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    ImageComponent explain_controls
      image = Images/Tetris_explains.png
      saveStartStop = False
      size = (1.04, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent Controls
      letterHeight = 0.05
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This is how you move the Tetris-Blocks:
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    TextComponent Text_continue_4
      letterHeight = 0.05
      pos = (0.0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to start the first TETRIS-GAME!
      wrapWidth = 2
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    KeyboardComponent press_continue_4
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wait_1s_after_cond
    RoutineSettingsComponent wait_1s_after_cond
      saveStartStop = False
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    CodeComponent add_data_condition
      Code Type = Py
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      End Routine:
        #logs on and offsets and condition duration into one line for later processing
        thisExp.addData('Condition.started', condition_started)
        thisExp.addData('Condition.stopped', condition_stopped)
        thisExp.addData('Condition.duration', condition_stopped - condition_started)
        thisExp.addData('Condition.info', f'info_{condition}')
        if condition == "play_Tetris":
            thisExp.addData('game.score', game.score.value)
    TextComponent fix_after_cond
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine explanation_basic_structure
    RoutineSettingsComponent explanation_basic_structure
      saveStartStop = False
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    TextComponent Announcement
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = During the Experiment you will encounter 4 different symbols:
      wrapWidth = 1.8
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    ImageComponent controller_example_1
      image = Images/controller.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent watch_example_1
      image = Images/eye.png
      pos = (-0.2, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent motorcontrol_example_1
      image = Images/hand.png
      pos = (0.2, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent baseline_example_1
      image = Images/crosshair.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent press_continue_6
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Text_continue_6
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to continue!
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  Routine explain_watch_Tetris
    RoutineSettingsComponent explain_watch_Tetris
      saveStartStop = False
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    ImageComponent watch_example
      image = Images/eye.png
      pos = (-0.65, 0.0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_watch
      letterHeight = 0.06
      pos = (0.2, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Eye: Watch Tetris! Just look at the screen while a game recording is played for you. Do not press any buttons!
      wrapWidth = 1.25
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    TextComponent Text_continue_9
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to continue!
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    KeyboardComponent press_continue_9
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_fixation_cross
    RoutineSettingsComponent explain_fixation_cross
      saveStartStop = False
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    ImageComponent baseline_example
      image = Images/crosshair.png
      pos = (-0.65, 0.0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_cross
      letterHeight = 0.06
      pos = (0.2, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Fixation Cross: just look at the cross in the middle of the screen and do nothing else!
      wrapWidth = 1.25
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    TextComponent Text_continue_10
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to continue!
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    KeyboardComponent press_continue_10
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine explain_motor_control
    RoutineSettingsComponent explain_motor_control
      saveStartStop = False
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    ImageComponent motorcontrol_example
      image = Images/hand.png
      pos = (-0.65, 0.0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_motor
      letterHeight = 0.06
      pos = (0.2, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hand: Press the Buttons ALTERNATELY (one after another) to the rhythm displayed on the screen!
      wrapWidth = 1.25
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    TextComponent Text_continue_8
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any button to continue!
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    KeyboardComponent press_continue_8
      allowedKeys = 'return', psychopy_key_1, psychopy_key_2, psychopy_key_3, psychopy_key_4, psychopy_key_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine load_processes
  Routine check_for_processes
  Routine show_pretrial
  Routine check_for_pretrial
  Routine show_play
  Routine check_window_play
  Routine show_watch
  Routine check_window_watch
  Routine wait_1s
  Routine check_response_box
  Routine pretrial_intro
  Routine explain_pretrial
  Routine explain_tetris_1
  Routine explain_tetris_2
  Routine wait_1s
  Routine play_pretrial
  Routine wait_1s
  Routine intro_main
  Routine explanation_basic_structure
  Routine explain_play_Tetris
  Routine explain_motor_control
  Routine explain_watch_Tetris
  Routine explain_fixation_cross
  Routine start_experiment
  Routine wait_1s
  Routine wait_1s
  Routine wait_for_trigger
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loop_template.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [{'condition': 'play_Tetris', 'targeted_duration': 20, 'Images_next_cond': 'Images/controller.png'},
      {'condition': 'motor_control', 'targeted_duration': 20, 'Images_next_cond': 'Images/hand.png'},
      {'condition': 'watch_Tetris', 'targeted_duration': 20, 'Images_next_cond': 'Images/eye.png'},
      {'condition': 'fixation_cross', 'targeted_duration': 20, 'Images_next_cond': 'Images/crosshair.png'}]
    Routine Show_next_Cond
    Routine Condition
    Routine wait_1s_after_cond
  LoopTerminator trials
  Routine wait_10sec_for_Trigger
  Routine End
